<CompuCell3D Revision="0" Version="4.3.2">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>14.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="ct1"/>
      <CellType TypeId="2" TypeName="ct2"/>
      <CellType TypeId="3" TypeName="ct3"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="ct1" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="ct2" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="ct3" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>
   
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="ct1" LambdaSurface="2.0" TargetSurface="50"/>
      <SurfaceEnergyParameters CellType="ct2" LambdaSurface="2.0" TargetSurface="50"/>
      <SurfaceEnergyParameters CellType="ct3" LambdaSurface="2.0" TargetSurface="50"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="ct1">20.0</Energy>
      <Energy Type1="Medium" Type2="ct2">12.0</Energy>
      <Energy Type1="Medium" Type2="ct3">5.0</Energy>
      <Energy Type1="ct1" Type2="ct1">7.0</Energy>
      <Energy Type1="ct1" Type2="ct2">8.0</Energy>
      <Energy Type1="ct1" Type2="ct3">15.0</Energy>
      <Energy Type1="ct2" Type2="ct2">10.0</Energy>
      <Energy Type1="ct2" Type2="ct3">8.0</Energy>
      <Energy Type1="ct3" Type2="ct3">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="ConnectivityGlobal">
      
      <!-- Connectivity constraint applied to each cell. Energy penalty specifies how strong the constraint is. Penalty is specified for each type  -->
      <!-- This constraint works in 2D and 3D on all type of lattices. It might be slowdown your simulation. For faster option - 2D and square lattice you may use Connectivity or ConnectivityLocalFlex -->
      <!-- To speed up simulation comment out unnecessary constraints for types which don't need the constraint -->
      <!-- By default we will always precheck connectivity BUT in simulations in which there is no risk of having unfragmented cell one can add this flag to speed up computations -->
      <!-- To turn off precheck uncomment line below -->
      <!-- <DoNotPrecheckConnectivity/> -->
      <Penalty Type="ct1">1000000</Penalty>
      <Penalty Type="ct2">1000000</Penalty>
      <Penalty Type="ct3">1000000</Penalty>
   </Plugin>
   
   <Steppable Type="BlobInitializer">
      
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="128" y="128" z="0"/>
         <Radius>50</Radius>
         <Gap>1</Gap>
         <Width>5</Width>
         <Types>ct1,ct2,ct3</Types>
      </Region>
   </Steppable>
</CompuCell3D>
